OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Time based epoching
  Epoch 1 duration (in sec) = 10
  Epoch 1 intervals (in sec) = 0.5
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.5
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
-> Spectral analysis (FFT) => #3
  Spectral components = Amplitude
#3.Amplitude -> after fft
  Minimum frequency to display = 0
  Maximum frequency to display = 40
#3.Amplitude -> alpha => #5
  Frequencies to select = 7:13
-> alpha
  Minimum frequency to display = 0
  Maximum frequency to display = 40
#3.Amplitude -> beta => #7
  Frequencies to select = 13:25
#3.Amplitude -> gamma => #8
  Frequencies to select = 25:60
#3.Amplitude -> delta => #9
  Frequencies to select = 4:7
#3.Amplitude -> theta => #10
  Frequencies to select = 0:4
alpha=#5, beta=#7, gamma=#8, delta=#9, theta=#10 -> 0xc67a01dc Simple DSP => #11
  Equation = A/(A+B+C+D+E)
-> alpha relative
  Minimum frequency to display = 0
  Maximum frequency to display = 40
#11 -> Simple DSP "square" => #13
  Equation = x*x
-> Simple DSP
  Equation = 1/x
#13 -> Power spectrum display
  Minimum frequency to display = 0
  Maximum frequency to display = 40
Data=#0.Signal stream -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

0xc73e83ec CSV File Writer
  Filename = record-[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
