OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)
Comment
  LEFT HAND
Comment
  RIGHT HAND
Comment
  differences in epoch lenghts

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Signal=#0.Signal stream, Channel localization=#0.Channel localisation -> 0xc67a01dc 2D topographic map
  Interpolation type = 1
  Delay (in s) = 0
#0.Signal stream -> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Temporal filter "beta"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 13
  High cut frequency (Hz) = 25
  Pass band ripple (dB) = 0.5
-> Channel Selector "12"
  Channel List = 12
  Action = Select
  Channel Matching Method = Smart
-> Simple DSP => #7
  Equation = x*x
#2 -> Time based epoching
  Epoch 1 duration (in sec) = 10
  Epoch 1 intervals (in sec) = 0.0
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Temporal filter "beta"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 13
  High cut frequency (Hz) = 25
  Pass band ripple (dB) = 0.5
-> Channel Selector "12"
  Channel List = 12
  Action = Select
  Channel Matching Method = Smart
-> Simple DSP
  Equation = x*x
-> Univariate Statistics => #13
  Mean = true
  Variance = true
  Range = true
  Median = true
  IQR = true
  Percentile = true
  Percentile value = 30
A=#7, B=#13.Mean -> Simple DSP "E(beta)-E(beta)_ref" => #14
  Equation = (a-b)/b
#2 -> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Temporal filter "beta"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 13
  High cut frequency (Hz) = 25
  Pass band ripple (dB) = 0.5
-> Channel Selector "10"
  Channel List = 10
  Action = Select
  Channel Matching Method = Smart
-> Simple DSP => #19
  Equation = x*x
#2 -> Time based epoching
  Epoch 1 duration (in sec) = 10
  Epoch 1 intervals (in sec) = 0.0
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Temporal filter "beta"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 13
  High cut frequency (Hz) = 25
  Pass band ripple (dB) = 0.5
-> Channel Selector "10"
  Channel List = 10
  Action = Select
  Channel Matching Method = Smart
-> Simple DSP
  Equation = x*x
-> Univariate Statistics => #25
  Mean = true
  Variance = true
  Range = true
  Median = true
  IQR = true
  Percentile = true
  Percentile value = 30
A=#19, B=#25.Mean -> Simple DSP "E(beta)-E(beta)_ref" => #26
  Equation = (a-b)/b
A=#26, B=#14 -> Simple DSP
  Equation = a<>b
-> Analog VRPN Server
  Peripheral name = openvibe-vrpn
