OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)
Comment
  this patch computes beta event-related desynchronisation
  the measure will be changed during mental preparation of motor act
Comment
  2 variants:with or without algo training

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
-> 0xc67a01dc Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Channel Selector "10:12"
  Channel List = 10:12
  Action = Select
  Channel Matching Method = Smart
-> Spectral analysis (FFT) => #5
  Spectral components = Amplitude
#5.Amplitude -> beta power => #6
  Frequencies to select = 13:25
#1 -> Time based epoching
  Epoch 1 duration (in sec) = 15
  Epoch 1 intervals (in sec) = 0.0
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Channel Selector "10:12"
  Channel List = 10:12
  Action = Select
  Channel Matching Method = Smart
-> Spectral analysis (FFT) => #10
  Spectral components = Amplitude
#10.Amplitude -> beta power
  Frequencies to select = 13:25
-> Simple DSP
  Equation = x
-> Univariate Statistics => #13
  Mean = true
  Variance = true
  Range = true
  Median = true
  IQR = true
  Percentile = true
  Percentile value = 30
A=#6, B=#13.Mean -> Simple DSP "E(beta)-E(beta)_ref" => #14
  Equation = A-B
A=#14, B=#13.Mean -> Simple DSP
  Equation = A/B
-> Feature aggregator "beta-ERD"
-> Analog VRPN Server
  Peripheral name = openvibe-vrpn
Signal=#0.Signal stream, Channel localization=#0.Channel localisation -> 2D topographic map
  Interpolation type = 1
  Delay (in s) = 0

0xc73e83ec Reference Channel
  Channel = Ref_Nose
  Channel Matching Method = Smart

0xc73e83ec Signal Differential/Integral
  Operation = Differential
  Order = 1

0xc73e83ec Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Path_UserData}/my-classifier.xml
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
