OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)
Comment
  Little tip:
  you could try another connectivity measure,that this box allows
Comment
  Maybe need in normalization here
Comment
  [1,1,1,1,1,1,1,1,1]   feature vector related to high creativity

  [0,0,0,0,0,0,0,0,0]   feature vector related to low creativity

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.5
  High cut frequency (Hz) = 60
  Pass band ripple (dB) = 0.5
-> 0xc67a01dc Time based epoching => #2
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.5
-> Channel Selector "left hemisphere"
  Channel List = Fp1;Fp3;Fp7;T3;T5;C3;P3
  Action = Select
  Channel Matching Method = Name
-> Spectral analysis (FFT) => #4
  Spectral components = Amplitude
#4.Amplitude -> alpha
  Frequencies to select = 7:13
-> Simple DSP => #6
  Equation = x
#2 -> Connectivity Measure => #7
  Method = Single-Trial Phase Locking Value
  Pairs of channels = 20-1:7 21-1:7
  Channel Matching Method = Smart
Input stream 1=#6, Input stream 2=#7 -> Feature aggregator => #8
-> CSV File Writer
  Filename = record-[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#8 -> Level measure
#8 -> Analog VRPN Server
  Peripheral name = openvibe-vrpn
