OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)

fear => #0
  Filename = ${Player_ScenarioDirectory}/fear.csv
  Column separator = ;
  Don't use the file time = false
  Samples per buffer = 1
-> Feature aggregator => #1
#0 -> Timeout => #2
  Timeout delay = 10
  Output Stimulation = OVTK_StimulationId_Train
happy
  Filename = ${Player_ScenarioDirectory}/happy.csv
  Column separator = ;
  Don't use the file time = false
  Samples per buffer = 1
-> Feature aggregator => #4
sad
  Filename = ${Player_ScenarioDirectory}/sad.csv
  Column separator = ;
  Don't use the file time = false
  Samples per buffer = 1
-> Feature aggregator => #6
neutral => #7
  Filename = ${Player_ScenarioDirectory}/neutral.csv
  Column separator = ;
  Don't use the file time = false
  Samples per buffer = 1
Data=#7 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#7 -> Feature aggregator => #9
-> Python scripting
  Clock frequency (Hz) = 64
  Script = C:/Users/Bill/Documents/hackatonPr/python/test.py
Stimulations=#2, Features for class 1=#1, Features for class 2=#4, Features for class 3=#6, Features for class 4=#9 -> Classifier trainer => #11
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Player_ScenarioDirectory}/my-classifier.xml
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Class 3 label = OVTK_StimulationId_Label_03
  Class 4 label = OVTK_StimulationId_Label_04
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Pause
Stimulations=#11 -> Signal display "After Classifier"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
