OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#0.Signal stream -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Signal stream -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 12
  High cut frequency (Hz) = 32
  Pass band ripple (dB) = 0.5
-> Time based epoching => #3
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.25
-> Temporal filter "alpha"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 12
  Pass band ripple (dB) = 0.5
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #7
  Equation = log(1+x)
-> Channel Selector "F3" => #8
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
#7 -> Channel Selector "F4" => #9
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart
Input - A=#8, Input - B=#9 -> Simple DSP => #10
  Equation = (a-b)/(a+b)
Data=#10 -> Signal display "Alpha comparison"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#9 -> Signal display "F4"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#3 -> 0xc67a01dc Temporal filter "alpha"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 12
  Pass band ripple (dB) = 0.5
-> Channel Selector "P3;Pz;P4"
  Channel List = P3;Pz;P4
  Action = Select
  Channel Matching Method = Smart
-> Simple DSP
  Equation = x*x
-> Signal average => #16
-> Channel Selector "1" => #17
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
#16 -> Channel Selector "2" => #18
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
#16 -> Channel Selector "3" => #19
  Channel List = 3
  Action = Select
  Channel Matching Method = Smart
Input - A=#17, Input - B=#18, Input - C=#19 -> Simple DSP => #20
  Equation = 1/((log(1+a) + log(1+b) + log(1+c)) / 3)
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9001
  OSC Address = /eeg
Input 1=#20, Input 2=#10 -> Signal Merger => #22
Data=#22 -> Signal display "SignalMerge"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#22 -> CSV File Writer
  Filename = C:/Users/Bill/Desktop/HackatonPrague/record-[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Data=#20 -> Signal display "Arousal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

Clock stimulator => #26
  Interstimulation interval (in sec) = 3.0
  Stimulation = OVTK_GDF_100_Watt
Clock stimulator => #27
  Interstimulation interval (in sec) = 5.0
  Stimulation = OVTK_StimulationId_VisualStimulationStop
Input stimulations 1=#26, Input stimulations 2=#27 -> Stimulation multiplexer
-> Display cue image
  Display images in full screen = true
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = ${Player_ScenarioDirectory}/IAPS_selections/SPECS_migraine_study/Negative_HighA/6260.jpg
  Stimulation 1 = OVTK_GDF_100_Watt

0xc73e83ec Temporal filter "beta"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 12
  High cut frequency (Hz) = 25
  Pass band ripple (dB) = 0.5
-> 0xc73e83ec Simple DSP
  Equation = x*x
-> 0xc73e83ec Signal average
-> 0xc73e83ec Simple DSP => #33
  Equation = log(1+x)
0xc73e83ec Temporal filter "gamma"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 25
  High cut frequency (Hz) = 60
  Pass band ripple (dB) = 0.5
-> 0xc73e83ec Simple DSP
  Equation = x*x
-> 0xc73e83ec Signal average
-> 0xc73e83ec Simple DSP => #37
  Equation = log(1+x)
0xc73e83ec Temporal filter "delta"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 4
  Pass band ripple (dB) = 0.5
-> 0xc73e83ec Simple DSP
  Equation = x*x
-> 0xc73e83ec Signal average
-> 0xc73e83ec Simple DSP => #41
  Equation = log(1+x)
0xc73e83ec Temporal filter "theta"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 8
  Pass band ripple (dB) = 0.5
-> 0xc73e83ec Simple DSP
  Equation = x*x
-> 0xc73e83ec Signal average
-> 0xc73e83ec Simple DSP => #45
  Equation = log(1+x)
Input - B=#33, Input - C=#37, Input - D=#41, Input - E=#45 -> 0xc73e83ec Simple DSP "relative alpha power"
  Equation = a/(a+b+c+d+e)
-> 0xc73e83ec Simple DSP "inverse alpha power"
  Equation = 1/x
