OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)
Comment
  try to use epoch averaging
  instead signal averaging
Comment
  channel indices depends on device type
  (this patch is tuned for Muse headband)
Comment
  python script to normalize value (0-1)
Comment
  python script to normalize value (0-1)
Comment
  feature aggregation
Comment
  classifying features to known clusters
Comment
  running some commands
  related to certain clusters

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#0.Signal stream -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Signal stream -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.5
  High cut frequency (Hz) = 70
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 10
  Epoch 1 intervals (in sec) = 0.5
-> Signal average => #4
-> Spectral analysis (FFT) => #5
  Spectral components = Amplitude
#5.Amplitude -> Frequency Band Selector
  Frequencies to select = 7:13
-> Simple DSP => #7
  Equation = 1/x
#4 -> Channel Selector "FP1 (2)"
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
-> Spectral analysis (FFT) => #9
  Spectral components = Amplitude
#9.Amplitude -> alpha 1 => #10
  Frequencies to select = 7:13
#4 -> Channel Selector "FP2 (3)"
  Channel List = 3
  Action = Select
  Channel Matching Method = Smart
-> Spectral analysis (FFT) => #12
  Spectral components = Amplitude
#12.Amplitude -> alpha 2 => #13
  Frequencies to select = 7:13
A=#10, B=#13 -> Simple DSP "asymmetry coefficient" => #14
  Equation = A-B
Input 1=#7, Input 2=#14 -> Signal Merger
-> Feature aggregator => #16
Features=#16 -> Classifier processor => #17
  Filename to load configuration from =
#17.Labels -> Run Command
  Stimulation 1 = OVTK_StimulationId_Label_01
  Command 1 =
  Stimulation 2 = OVTK_StimulationId_Label_02
  Command 2 =
  Stimulation 3 = OVTK_StimulationId_Label_03
  Command 3 =
  Stimulation 4 = OVTK_StimulationId_Label_04
  Command 4 =
  Stimulation 5 = OVTK_StimulationId_Label_05
  Command 5 =
#16 -> CSV File Writer
  Filename = record-[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10

0xc73e83ec Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4

0xc73e83ec Sign Change Detector
  Sign switch to positive stimulation = OVTK_StimulationId_Label_01
  Sign switch to negative stimulation = OVTK_StimulationId_Label_00
  Channel Index = 1

0xc73e83ec Matrix Display "Alpha asymmetry as color"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 10
  Symetric min/max = false
  Real time min/max = true
