OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#0.Signal stream -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Signal stream -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 12
  High cut frequency (Hz) = 32
  Pass band ripple (dB) = 0.5
-> Time based epoching => #3
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.25
-> Channel Selector "P3;Pz;P4"
  Channel List = P3;Pz;P4
  Action = Select
  Channel Matching Method = Smart
-> Simple DSP
  Equation = x*x
-> Signal average => #6
-> Channel Selector "1" => #7
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
#6 -> Channel Selector "2" => #8
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
#6 -> Channel Selector "3" => #9
  Channel List = 3
  Action = Select
  Channel Matching Method = Smart
Input - A=#7, Input - B=#8, Input - C=#9 -> Simple DSP => #10
  Equation = 1/((log(1+a) + log(1+b) + log(1+c)) / 3)
Data=#10 -> Signal display "Arousal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#3 -> Temporal filter "alpha"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 12
  Pass band ripple (dB) = 0.5
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #15
  Equation = log(1+x)
-> Channel Selector "F3" => #16
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
#15 -> Channel Selector "F4" => #17
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart
Input - A=#16, Input - B=#17 -> Simple DSP => #18
  Equation = (a-b)/(a+b)
Input 1=#10, Input 2=#18 -> Signal Merger
-> Feature aggregator => #20
-> CSV File Writer
  Filename = record-[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Features=#20 -> Classifier processor => #22
  Filename to load configuration from = ${Player_ScenarioDirectory}/my-classifier.xml
Stimulations=#22.Labels -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#22.Labels -> Run Command
  Stimulation 1 = OVTK_StimulationId_Label_01
  Command 1 = 1111
  Stimulation 2 = OVTK_StimulationId_Label_02
  Command 2 =
  Stimulation 3 = OVTK_StimulationId_Label_03
  Command 3 =
  Stimulation 4 = OVTK_StimulationId_Label_04
  Command 4 =
  Stimulation 5 = OVTK_StimulationId_Label_05
  Command 5 =

0xc73e83ec Temporal filter "beta"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 12
  High cut frequency (Hz) = 25
  Pass band ripple (dB) = 0.5
-> 0xc73e83ec Simple DSP
  Equation = x*x
-> 0xc73e83ec Signal average
-> 0xc73e83ec Simple DSP => #28
  Equation = log(1+x)
0xc73e83ec Temporal filter "gamma"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 25
  High cut frequency (Hz) = 60
  Pass band ripple (dB) = 0.5
-> 0xc73e83ec Simple DSP
  Equation = x*x
-> 0xc73e83ec Signal average
-> 0xc73e83ec Simple DSP => #32
  Equation = log(1+x)
0xc73e83ec Temporal filter "delta"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 4
  Pass band ripple (dB) = 0.5
-> 0xc73e83ec Simple DSP
  Equation = x*x
-> 0xc73e83ec Signal average
-> 0xc73e83ec Simple DSP => #36
  Equation = log(1+x)
0xc73e83ec Temporal filter "theta"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 8
  Pass band ripple (dB) = 0.5
-> 0xc73e83ec Simple DSP
  Equation = x*x
-> 0xc73e83ec Signal average
-> 0xc73e83ec Simple DSP => #40
  Equation = log(1+x)
Input - B=#28, Input - C=#32, Input - D=#36, Input - E=#40 -> 0xc73e83ec Simple DSP "relative alpha power"
  Equation = a/(a+b+c+d+e)
-> 0xc73e83ec Simple DSP "inverse alpha power"
  Equation = 1/x

OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9001
  OSC Address = /eeg
