OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)
Comment
  happy (1,1)
  sad (-1,-1)
  fear (-1,1)
  neutral (0,0)

fear => #0
  Filename = C:/Programmes/openvibe/share/openvibe/scenarios/fear.csv
  Column separator = ;
  Don't use the file time = false
  Unused parameter = 0
happy => #1
  Filename = C:/Programmes/openvibe/share/openvibe/scenarios/happy.csv
  Column separator = ;
  Don't use the file time = false
  Unused parameter = 0
neutral => #2
  Filename = C:/Programmes/openvibe/share/openvibe/scenarios/neutral.csv
  Column separator = ;
  Don't use the file time = false
  Unused parameter = 0
sad => #3
  Filename = C:/Programmes/openvibe/share/openvibe/scenarios/sad.csv
  Column separator = ;
  Don't use the file time = false
  Unused parameter = 0
Lua Stimulator => #4
  Lua Script =
Stimulations=#4, Features for class 1=#1, Features for class 2=#3, Features for class 3=#0, Features for class 4=#2 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Path_UserData}/my-classifier.xml
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Class 3 label = OVTK_StimulationId_Label_03
  Class 4 label = OVTK_StimulationId_Label_04
  Class 5 label = OVTK_StimulationId_Label_05
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
