OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)
Comment
  LEFT HAND
Comment
  RIGHT HAND
Comment
  differences in epoch lenghts

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#0.Signal stream -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Signal stream -> Temporal filter "beta" => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 13
  High cut frequency (Hz) = 25
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0
-> Simple DSP
  Equation = x*x
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Channel Selector "C3"
  Channel List = C3
  Action = Select
  Channel Matching Method = Smart
-> Simple DSP => #7
  Equation = log(1+x)
#2 -> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0
-> Simple DSP
  Equation = x*x
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Channel Selector "C4"
  Channel List = C4
  Action = Select
  Channel Matching Method = Smart
-> Simple DSP => #12
  Equation = log(1+x)
#2 -> Time based epoching
  Epoch 1 duration (in sec) = 10
  Epoch 1 intervals (in sec) = 0.0
-> Simple DSP
  Equation = x*x
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Channel Selector "C4"
  Channel List = C4
  Action = Select
  Channel Matching Method = Smart
-> Simple DSP
  Equation = log(1+x)
-> Univariate Statistics => #18
  Mean = true
  Variance = true
  Range = true
  Median = true
  IQR = true
  Percentile = true
  Percentile value = 30
A=#12, B=#18.Mean -> Simple DSP "E(beta)-E(beta)_ref" => #19
  Equation = (a-b)/b
#2 -> Time based epoching
  Epoch 1 duration (in sec) = 10
  Epoch 1 intervals (in sec) = 0.0
-> Simple DSP
  Equation = x*x
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Channel Selector "C3"
  Channel List = C3
  Action = Select
  Channel Matching Method = Smart
-> Simple DSP
  Equation = log(1+x)
-> Univariate Statistics => #25
  Mean = true
  Variance = true
  Range = true
  Median = true
  IQR = true
  Percentile = true
  Percentile value = 30
A=#7, B=#25.Mean -> Simple DSP "E(beta)-E(beta)_ref" => #26
  Equation = (a-b)/b
A=#26, B=#19 -> Simple DSP "beta left-right comparison" => #27
  Equation = a<>b
-> 0xc67a01dc OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9001
  OSC Address = /eeg
#0.Signal stream -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 12
  High cut frequency (Hz) = 32
  Pass band ripple (dB) = 0.5
-> Time based epoching => #30
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.25
-> Temporal filter "alpha"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 12
  Pass band ripple (dB) = 0.5
-> Channel Selector "P3;Pz;P4"
  Channel List = P3;Pz;P4
  Action = Select
  Channel Matching Method = Smart
-> Simple DSP
  Equation = x*x
-> Signal average => #34
-> Channel Selector "1" => #35
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
#34 -> Channel Selector "2" => #36
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
#34 -> Channel Selector "3" => #37
  Channel List = 3
  Action = Select
  Channel Matching Method = Smart
Input - A=#35, Input - B=#36, Input - C=#37 -> Simple DSP => #38
  Equation = 1/((log(1+a) + log(1+b) + log(1+c)) / 3)
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9001
  OSC Address = /eeg
Data=#38 -> Signal display "Arousal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#30 -> Temporal filter "alpha"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 12
  Pass band ripple (dB) = 0.5
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #44
  Equation = log(1+x)
-> Channel Selector "F3" => #45
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
#44 -> Channel Selector "F4" => #46
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart
Input - A=#45, Input - B=#46 -> Simple DSP => #47
  Equation = (a-b)/(a+b)
Data=#47 -> Signal display "Alpha comparison"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input 1=#47, Input 2=#38 -> emotional state => #49
Data=#49 -> Signal display "SignalMerge"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#49 -> CSV File Writer "emotional state"
  Filename = C:/Users/Bill/Desktop/HackatonPrague/record-[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input 1=#27, Input 2=#49 -> Signal Merger
-> CSV File Writer
  Filename = record-[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Data=#46 -> Signal display "F4"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
