OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)
Comment
  try to use epoch averaging
  instead signal averaging
Comment
  channel indices depends on device type
  (this patch is tuned for Muse headband)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.5
  High cut frequency (Hz) = 70
  Pass band ripple (dB) = 0.5
-> 0xc67a01dc Time based epoching
  Epoch 1 duration (in sec) = 10
  Epoch 1 intervals (in sec) = 0.5
-> Signal average => #3
-> Channel Selector "FP1 (2)"
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
-> Spectral analysis (FFT) => #5
  Spectral components = Amplitude
#5.Amplitude -> alpha 1 => #6
  Frequencies to select = 7:13
#3 -> Channel Selector "FP2 (3)"
  Channel List = 3
  Action = Select
  Channel Matching Method = Smart
-> Spectral analysis (FFT) => #8
  Spectral components = Amplitude
#8.Amplitude -> alpha 2 => #9
  Frequencies to select = 7:13
A=#6, B=#9 -> Simple DSP "asymmetry coefficient" => #10
  Equation = A-B
-> Generic stream writer
  Filename = record-[$core{date}-$core{time}].ov
  Use compression = false
#10 -> CSV File Writer
  Filename = record-[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#10 -> Level measure

0xc73e83ec Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4

0xc73e83ec Sign Change Detector
  Sign switch to positive stimulation = OVTK_StimulationId_Label_01
  Sign switch to negative stimulation = OVTK_StimulationId_Label_00
  Channel Index = 1

0xc73e83ec Matrix Display "Alpha asymmetry as color"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 10
  Symetric min/max = false
  Real time min/max = true
