OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)
Comment
  try to use epoch averaging
  instead signal averaging
Comment
  channel indices depends on device type
  (this patch is tuned for Muse headband)
Comment
  frontal alpha asymmetry coefficient
Comment
  this block streams data to VRPN server

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#0.Signal stream -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Signal stream -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.5
  High cut frequency (Hz) = 70
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 10
  Epoch 1 intervals (in sec) = 0.5
-> Signal average => #4
-> Channel Selector "FP1 (2)"
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
-> Spectral analysis (FFT) => #6
  Spectral components = Amplitude
#6.Amplitude -> alpha 1 => #7
  Frequencies to select = 7:13
#4 -> Channel Selector "FP2 (3)"
  Channel List = 3
  Action = Select
  Channel Matching Method = Smart
-> Spectral analysis (FFT) => #9
  Spectral components = Amplitude
#9.Amplitude -> alpha 2 => #10
  Frequencies to select = 7:13
A=#7, B=#10 -> 0xc67a01dc Simple DSP "alpha1+alpha2" => #11
  Equation = A-B
A=#7, B=#10 -> Simple DSP "alpha1-alpha2" => #12
  Equation = A+B
A=#11, B=#12 -> Simple DSP "asymmetry coefficient" => #13
  Equation = A/B
-> CSV File Writer
  Filename = record-[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#13 -> Simple DSP
  Equation = x
-> Analog VRPN Server
  Peripheral name = openvibe-vrpn
#13 -> Level measure

0xc73e83ec Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
